OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Analog VRPN Server
  Peripheral name = liveEEG
Keyboard stimulator => #2
  Filename = ../share/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
Signal=#0.Signal strea, Stimulations=#2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#2 -> Button VRPN Server
  Peripheral name = CENTControlStream
  Button 1 ON = OVTK_StimulationId_Label_09
  Button 1 OFF = OVTK_StimulationId_Label_00
