OpenViBE-Scenario
Comment
  1 = Current noise value
  2 = Noise threshold1
  3 = Noise threshold2
  4 = Min value
  5 = Max value

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Temporal filter - GPL => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector "Channels: 1-4" => #2
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
-> liveEEG
  Peripheral name = liveEEG
Signal=#2 -> Signal display "1-4"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#1 -> Channel Selector "Channels: 5-8" => #5
  Channel List = 5:8
  Action = Select
  Channel Matching Method = Smart
-> liveEEG_5_8
  Peripheral name = liveEEG_5_8
Signal=#5 -> 0xc67a01dc Signal display "5-8"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0.Signal strea -> Time based epoching => #8
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Temporal filter "Noise band" => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 70
  High cut frequency (Hz) = 80
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #11
  Spectral components = Amplitude
#11.Amplitude -> noise_c => #12
  Considers zeros = false
#9 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #14
  Spectral components = Amplitude
#14.Amplitude -> noise_c => #15
  Considers zeros = false
#9 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #17
  Spectral components = Amplitude
#17.Amplitude -> noise_c => #18
  Considers zeros = false
#9 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #20
  Spectral components = Amplitude
#20.Amplitude -> noise_c => #21
  Considers zeros = false
Input - A=#12, Input - B=#15, Input - C=#18, Input - D=#21 -> Simple DSP "CURRENT_NOISE_LEVEL" => #22
  Equation = (a+b+c+d)/4
#8 -> Temporal filter "EEG-band" => #23
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.5
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #25
  Spectral components = Amplitude
#25.Amplitude -> noise_max => #26
  Considers zeros = false
#23 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #28
  Spectral components = Amplitude
#28.Amplitude -> noise_max => #29
  Considers zeros = false
#23 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #31
  Spectral components = Amplitude
#31.Amplitude -> noise_max => #32
  Considers zeros = false
#23 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #34
  Spectral components = Amplitude
#34.Amplitude -> noise_max => #35
  Considers zeros = false
Input - A=#26, Input - B=#29, Input - C=#32, Input - D=#35 -> Simple DSP "MAX_NOISE" => #36
  Equation = (a+b+c+d)/4
-> Simple DSP "Threshold 1" => #37
  Equation = x*(1/3)
#36 -> Simple DSP "Threshold 2" => #38
  Equation = x*(2/3)
#36 -> Simple DSP "Min noise" => #39
  Equation = 0
Input 1=#22, Input 2=#37, Input 3=#38, Input 4=#39, Input 5=#36 -> Noise level
  Peripheral name = CENTNoiseLevel

CENT VRPN Client
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
-> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
