OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Experiment information=#0.Experiment information, Signal=#0.Signal strea, Stimulation=#0.Stimulations -> GDF file writer
  Filename = record-[$core{date}-$core{time}].gdf
  0x8d21ff41 = $env{CENT_GDF_CONF}\\GameGdf.xml
#0.Signal strea -> Analog VRPN Server
  Peripheral name = liveEEG
#0.Signal strea -> 0xc67a01dc Analog VRPN Server
  Peripheral name = CENTInGamePowerLevel

Button VRPN Server
  Peripheral name = CENTControlStream
  Button 1 ON = OVTK_StimulationId_Label_09
  Button 1 OFF = OVTK_StimulationId_Label_00
