OpenViBE-Scenario
Comment
  Calculate theta and beta
  baseline powers. Write
  results to a csv file.
Comment
  Input
Comment
  Noise estimation
Comment
  Compute spectrum
Comment
  Feature extraction
Comment
  Output
Comment
  1 = Current noise value
  2 = Noise threshold1
  3 = Noise threshold2
  4 = Min value
  5 = Max value

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Identity
-> Time based epoching => #2
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Temporal filter "Noise band" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 70
  High cut frequency (Hz) = 80
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
#3 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #6
  Spectral components = Amplitude
#6.Amplitude -> noise_c => #7
  Considers zeros = false
#3 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #9
  Spectral components = Amplitude
#9.Amplitude -> noise_c => #10
  Considers zeros = false
#3 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #12
  Spectral components = Amplitude
#12.Amplitude -> noise_c => #13
  Considers zeros = false
#3 -> Channel Selector "Ch 5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Index
-> FFT => #15
  Spectral components = Amplitude
#15.Amplitude -> noise_c => #16
  Considers zeros = false
#3 -> Channel Selector "Ch 6"
  Channel List = 6
  Action = Select
  Channel Matching Method = Index
-> FFT => #18
  Spectral components = Amplitude
#18.Amplitude -> noise_c => #19
  Considers zeros = false
#3 -> Channel Selector "Ch 7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Index
-> FFT => #21
  Spectral components = Amplitude
#21.Amplitude -> noise_c => #22
  Considers zeros = false
#3 -> Channel Selector "Ch 8"
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
-> FFT => #24
  Spectral components = Amplitude
#24.Amplitude -> noise_c => #25
  Considers zeros = false
#2 -> Temporal filter "EEG-band" => #26
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.5
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
#26 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #29
  Spectral components = Amplitude
#29.Amplitude -> noise_max => #30
  Considers zeros = false
#26 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #32
  Spectral components = Amplitude
#32.Amplitude -> noise_max => #33
  Considers zeros = false
#26 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #35
  Spectral components = Amplitude
#35.Amplitude -> noise_max => #36
  Considers zeros = false
#26 -> Channel Selector "Ch 5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Index
-> FFT => #38
  Spectral components = Amplitude
#38.Amplitude -> noise_c => #39
  Considers zeros = false
#26 -> Channel Selector "Ch 6"
  Channel List = 6
  Action = Select
  Channel Matching Method = Index
-> FFT => #41
  Spectral components = Amplitude
#41.Amplitude -> noise_c => #42
  Considers zeros = false
#26 -> Channel Selector "Ch 7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Index
-> FFT => #44
  Spectral components = Amplitude
#44.Amplitude -> noise_c => #45
  Considers zeros = false
#26 -> Channel Selector "Ch 8"
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
-> FFT => #47
  Spectral components = Amplitude
#47.Amplitude -> noise_c => #48
  Considers zeros = false
Experiment information=#0.Experiment information, Signal=#0.Signal strea -> GDF file writer
  Filename = $env{CENT_CURRENT_SESSION}/baseline.gdf
#0.Signal strea -> Channel Rename => #50
  New channel names = C2;FP2;C1;FP1
CENT VRPN Client => #51
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_BaselineStart
  Button 2 OFF = OVTK_StimulationId_BaselineStop
#51.Output 1 -> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Triggers=#51.Output 2, Matrix=#50 -> Stream Switch => #53
  Switch stim for output 1 = OVTK_StimulationId_BaselineStart
  Switch stim for output 2 = OVTK_StimulationId_BaselineStop
#53.Output[0] -> Temporal filter - GPL => #54
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector "Channels: 1-4"
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
-> liveEEG
  Peripheral name = liveEEG
#54 -> Channel Selector "Channels: 5-8"
  Channel List = 5:8
  Action = Select
  Channel Matching Method = Smart
-> liveEEG_5_8
  Peripheral name = liveEEG_5_8
#53.Output[0] -> Channel Selector
  Channel List = C2;C1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #60
  Epoch 1 duration (in sec) = 5
  Epoch 1 intervals (in sec) = 5
-> Channel Selector
  Channel List = C2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Theta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 7
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm"
  Equation = log(x+1)
-> CSV File Writer "Write theta"
  Filename = $env{CENT_CURRENT_SESSION}/thetaval.csv
  Column separator = " "
  Use compression = false
#60 -> Channel Selector
  Channel List = C1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Beta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm"
  Equation = log(x+1)
-> CSV File Writer "Write beta"
  Filename = $env{CENT_CURRENT_SESSION}/betaval.csv
  Column separator = " "
  Use compression = false
#60 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Spectral analysis - GPL => #74
  Spectral components = Amplitude
#74.Amplitude -> CSV File Writer
  Filename = $env{CENT_CURRENT_SESSION}/baseline_spectrum.csv
  Column separator = ;
  Use compression = false
noise_c => #76
  Considers zeros = false
Input - A=#76, Input - B=#7, Input - C=#10, Input - D=#13, Input - E=#16, Input - F=#19, Input - G=#22, Input - H=#25 -> 0xc67a01dc Simple DSP "CURRENT_NOISE_LEVEL" => #77
  Equation = (a+b+c+d+e+f+g+h)/8
noise_max => #78
  Considers zeros = false
Input - A=#78, Input - B=#30, Input - C=#33, Input - D=#36, Input - E=#39, Input - F=#42, Input - G=#45, Input - H=#48 -> Simple DSP "MAX_NOISE_min_max_thresholds" => #79
  Equation = (a+b+c+d+e+f+g+h)/8
-> Simple DSP "Threshold 1" => #80
  Equation = x*(1/3)
#79 -> Simple DSP "Threshold 2" => #81
  Equation = x*(2/3)
#79 -> Simple DSP "Min noise" => #82
  Equation = 0
Input 1=#77, Input 2=#80, Input 3=#81, Input 4=#82, Input 5=#79 -> Noise level
  Peripheral name = CENTNoiseLevel

FFT
  Spectral components = Amplitude

FFT
  Spectral components = Amplitude
