OpenViBE-Scenario
Comment
  Calculate theta and beta
  baseline powers. Write
  results to a csv file.
Comment
  Input
Comment
  Noise estimation
Comment
  Compute spectrum
Comment
  Feature extraction
Comment
  Output
Comment
  1 = Current noise value
  2 = Noise threshold1
  3 = Noise threshold2
  4 = Min value
  5 = Max value

0xc67a01dc GDF file reader => #0
  Filename = $env{CENT_SCENARIOS_HOME}/gdf/EEG/2.gdf
  Samples per buffer = 25
Experiment information=#0.Experiment information, Signal=#0.EEG stream -> GDF file writer
  Filename = $env{CENT_CURRENT_SESSION}/baseline.gdf
#0.EEG stream -> Channel Rename => #2
  New channel names = C2;FP2;C1;FP1
#0.EEG stream -> Identity
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Temporal filter "Noise band" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 70
  High cut frequency (Hz) = 80
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #7
  Spectral components = Amplitude
#7.Amplitude -> noise_c => #8
  Considers zeros = false
#5 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #10
  Spectral components = Amplitude
#10.Amplitude -> noise_c => #11
  Considers zeros = false
#5 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #13
  Spectral components = Amplitude
#13.Amplitude -> noise_c => #14
  Considers zeros = false
#5 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #16
  Spectral components = Amplitude
#16.Amplitude -> noise_c => #17
  Considers zeros = false
Input - A=#8, Input - B=#11, Input - C=#14, Input - D=#17 -> Simple DSP "CURRENT_NOISE_LEVEL" => #18
  Equation = (a+b+c+d)/4
#4 -> Temporal filter "EEG-band" => #19
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.5
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #21
  Spectral components = Amplitude
#21.Amplitude -> noise_max => #22
  Considers zeros = false
#19 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #24
  Spectral components = Amplitude
#24.Amplitude -> noise_max => #25
  Considers zeros = false
#19 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #27
  Spectral components = Amplitude
#27.Amplitude -> noise_max => #28
  Considers zeros = false
#19 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #30
  Spectral components = Amplitude
#30.Amplitude -> noise_max => #31
  Considers zeros = false
Input - A=#22, Input - B=#25, Input - C=#28, Input - D=#31 -> Simple DSP "MAX_NOISE" => #32
  Equation = (a+b+c+d)/4
-> Simple DSP "Threshold 1" => #33
  Equation = x*(1/3)
#32 -> Simple DSP "Threshold 2" => #34
  Equation = x*(2/3)
#32 -> Simple DSP "Min noise" => #35
  Equation = 0
Input 1=#18, Input 2=#33, Input 3=#34, Input 4=#35, Input 5=#32 -> Analog VRPN Server
  Peripheral name = CENTNoiseLevel
Button VRPN Client => #37
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_BaselineStart
  Button 2 OFF = OVTK_StimulationId_BaselineStop
Triggers=#37.Output 2, Matrix=#2 -> Stream Switch => #38
  Switch stim for output 1 = OVTK_StimulationId_BaselineStart
  Switch stim for output 2 = OVTK_StimulationId_BaselineStop
#38.Output[0] -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Live EEG
  Peripheral name = liveEEG
#38.Output[0] -> Channel Selector
  Channel List = C2;C1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #42
  Epoch 1 duration (in sec) = 5
  Epoch 1 intervals (in sec) = 5
-> Channel Selector
  Channel List = C2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Theta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 7
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm"
  Equation = log(x+1)
-> CSV File Writer "Write theta"
  Filename = $env{CENT_CURRENT_SESSION}/thetaval.csv
  Column separator = " "
  Use compression = false
#42 -> Channel Selector
  Channel List = C1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Beta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm"
  Equation = log(x+1)
-> CSV File Writer "Write beta"
  Filename = $env{CENT_CURRENT_SESSION}/betaval.csv
  Column separator = " "
  Use compression = false
#42 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Spectral analysis - GPL => #56
  Spectral components = Amplitude
#56.Amplitude -> CSV File Writer
  Filename = $env{CENT_CURRENT_SESSION}/baseline_spectrum.csv
  Column separator = ;
  Use compression = false
#37.Output 1 -> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
