OpenViBE-Scenario
Comment
  1 = Current noise value
  2 = Noise threshold1
  3 = Noise threshold2
  4 = Min value
  5 = Max value

0xc67a01dc GDF file reader => #0
  Filename = $env{CENT_SCENARIOS_HOME}/gdf/EEG/2.gdf
  Samples per buffer = 25
#0.EEG stream -> Time based epoching => #1
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Temporal filter "Noise band" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 70
  High cut frequency (Hz) = 80
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #4
  Spectral components = Amplitude
#4.Amplitude -> noise_c => #5
  Considers zeros = false
#2 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #7
  Spectral components = Amplitude
#7.Amplitude -> noise_c => #8
  Considers zeros = false
#2 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #10
  Spectral components = Amplitude
#10.Amplitude -> noise_c => #11
  Considers zeros = false
#2 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #13
  Spectral components = Amplitude
#13.Amplitude -> noise_c => #14
  Considers zeros = false
Input - A=#5, Input - B=#8, Input - C=#11, Input - D=#14 -> Simple DSP "CURRENT_NOISE_LEVEL" => #15
  Equation = (a+b+c+d)/4
#1 -> Temporal filter "EEG-band" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.5
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #18
  Spectral components = Amplitude
#18.Amplitude -> noise_max => #19
  Considers zeros = false
#16 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #21
  Spectral components = Amplitude
#21.Amplitude -> noise_max => #22
  Considers zeros = false
#16 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #24
  Spectral components = Amplitude
#24.Amplitude -> noise_max => #25
  Considers zeros = false
#16 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #27
  Spectral components = Amplitude
#27.Amplitude -> noise_max => #28
  Considers zeros = false
Input - A=#19, Input - B=#22, Input - C=#25, Input - D=#28 -> Simple DSP "MAX_NOISE" => #29
  Equation = (a+b+c+d)/4
-> Simple DSP "Threshold 1" => #30
  Equation = x*(1/3)
#29 -> Simple DSP "Threshold 2" => #31
  Equation = x*(2/3)
#29 -> Simple DSP "Min noise" => #32
  Equation = 0
Input 1=#15, Input 2=#30, Input 3=#31, Input 4=#32, Input 5=#29 -> Analog VRPN Server
  Peripheral name = CENTNoiseLevel
#0.EEG stream -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Analog VRPN Server
  Peripheral name = liveEEG

Button VRPN Client => #36
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_BaselineStart
  Button 2 OFF = OVTK_StimulationId_BaselineStop
#36.Output 1 -> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
