OpenViBE-Scenario
Comment
  Input
Comment
  Noise estimation
Comment
  Feature extraction
Comment
  Load baseline values
Comment
  Load baseline values
Comment
  1 = Current noise value
  2 = Noise threshold1
  3 = Noise threshold2
  4 = Min value
  5 = Max value
Comment
  Classification
Comment
  Notifies the CENT client on every Epoch
  with stimulations OVTK_StimulationId_Label_00
  and OVTK_StimulationId_Label_01 interchangeably
Comment
  Output

0xc67a01dc GDF file reader => #0
  Filename = $env{CENT_SCENARIOS_HOME}/gdf/EEG/2.gdf
  Samples per buffer = 25
#0.EEG stream -> Temporal filter - GPL => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector "Channels: 1-4"
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
-> liveEEG
  Peripheral name = liveEEG
#1 -> Channel Selector "Channels: 5-8"
  Channel List = 5:8
  Action = Select
  Channel Matching Method = Smart
-> liveEEG_5_8
  Peripheral name = liveEEG_5_8
#0.EEG stream -> Identity
-> Time based epoching => #7
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Temporal filter "Noise band" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 70
  High cut frequency (Hz) = 80
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #10
  Spectral components = Amplitude
#10.Amplitude -> noise_c => #11
  Considers zeros = false
#8 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #13
  Spectral components = Amplitude
#13.Amplitude -> noise_c => #14
  Considers zeros = false
#8 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #16
  Spectral components = Amplitude
#16.Amplitude -> noise_c => #17
  Considers zeros = false
#8 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #19
  Spectral components = Amplitude
#19.Amplitude -> noise_c => #20
  Considers zeros = false
#8 -> Channel Selector "Ch 5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Index
-> FFT => #22
  Spectral components = Amplitude
#22.Amplitude -> noise_c => #23
  Considers zeros = false
#8 -> Channel Selector "Ch 6"
  Channel List = 6
  Action = Select
  Channel Matching Method = Index
-> FFT => #25
  Spectral components = Amplitude
#25.Amplitude -> noise_c => #26
  Considers zeros = false
#8 -> Channel Selector "Ch 7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Index
-> FFT => #28
  Spectral components = Amplitude
#28.Amplitude -> noise_c => #29
  Considers zeros = false
#8 -> Channel Selector "Ch 8"
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
-> FFT => #31
  Spectral components = Amplitude
#31.Amplitude -> noise_c => #32
  Considers zeros = false
Input - A=#11, Input - B=#14, Input - C=#17, Input - D=#20, Input - E=#23, Input - F=#26, Input - G=#29, Input - H=#32 -> Simple DSP "CURRENT_NOISE_LEVEL" => #33
  Equation = (a+b+c+d+e+f+g+h)/8
#7 -> Temporal filter "EEG-band" => #34
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.5
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> FFT => #36
  Spectral components = Amplitude
#36.Amplitude -> noise_max => #37
  Considers zeros = false
#34 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #39
  Spectral components = Amplitude
#39.Amplitude -> noise_max => #40
  Considers zeros = false
#34 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #42
  Spectral components = Amplitude
#42.Amplitude -> noise_max => #43
  Considers zeros = false
#34 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #45
  Spectral components = Amplitude
#45.Amplitude -> noise_max => #46
  Considers zeros = false
#34 -> Channel Selector "Ch 5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Index
-> FFT => #48
  Spectral components = Amplitude
#48.Amplitude -> noise_c => #49
  Considers zeros = false
#34 -> Channel Selector "Ch 6"
  Channel List = 6
  Action = Select
  Channel Matching Method = Index
-> FFT => #51
  Spectral components = Amplitude
#51.Amplitude -> noise_c => #52
  Considers zeros = false
#34 -> Channel Selector "Ch 7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Index
-> FFT => #54
  Spectral components = Amplitude
#54.Amplitude -> noise_c => #55
  Considers zeros = false
#34 -> Channel Selector "Ch 8"
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
-> FFT => #57
  Spectral components = Amplitude
#57.Amplitude -> noise_c => #58
  Considers zeros = false
Input - A=#37, Input - B=#40, Input - C=#43, Input - D=#46, Input - E=#49, Input - F=#52, Input - G=#55, Input - H=#58 -> Simple DSP "MAX_NOISE_min_max_thresholds" => #59
  Equation = (a+b+c+d+e+f+g+h)/8
-> Simple DSP "Threshold 1" => #60
  Equation = x*(1/3)
#59 -> Simple DSP "Threshold 2" => #61
  Equation = x*(2/3)
#59 -> Simple DSP "Min noise" => #62
  Equation = 0
Input 1=#33, Input 2=#60, Input 3=#61, Input 4=#62, Input 5=#59 -> Noise level
  Peripheral name = CENTNoiseLevel
#0.EEG stream -> Channel Rename
  New channel names = C2;FP2;C1;FP1
-> Channel Selector
  Channel List = C2;C1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #66
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.5
-> Channel Selector
  Channel List = C2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Theta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 7
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm" => #71
  Equation = log(x+1)
-> Simple DSP "ThetaCoeffFromCent" => #72
  Equation = 1,05
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/ThetaCoeff.cfg
#71 -> Simple DSP "ThetaPowerFromBaselineLua" => #73
  Equation = 5
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/thetabase.cfg
Input - A=#72, Input - B=#73 -> Simple DSP "multiply" => #74
  Equation = a*b
Input - A=#71, Input - B=#74 -> Simple DSP "Substract baseline (theta)" => #75
  Equation = a-b
-> Feature aggregator
-> Classifier processor => #77
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = $env{CENT_CURRENT_PATIENT}/IEP/class_theta.cfg
  Reject class label = OVTK_GDF_Rejection
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
#71 -> Simple DSP => #78
  Equation = 10
#66 -> Channel Selector
  Channel List = C1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Beta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm" => #83
  Equation = log(x+1)
-> Simple DSP "BetaPowerFromBaselineLua" => #84
  Equation = 5
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/betabase.cfg
#83 -> Simple DSP "BetaCoeffFromCent" => #85
  Equation = 1,05
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/BetaCoeff.cfg
Input - A=#84, Input - B=#85 -> Simple DSP "multiply" => #86
  Equation = a*b
Input - A=#83, Input - B=#86 -> Simple DSP "Substract baseline (beta)" => #87
  Equation = a-b
-> Feature aggregator
-> Classifier processor => #89
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = $env{CENT_CURRENT_PATIENT}/IEP/class_beta.cfg
  Reject class label = OVTK_GDF_Rejection
  Class 1 label = OVTK_StimulationId_NonTarget
  Class 2 label = OVTK_StimulationId_Target
New input[0]=#77.Labels, New input[1]=#89.Labels -> LuaVoter => #90
  Lua Script = $env{CENT_SCENARIOS_HOME}/luaVoter.lua
#89.Labels -> Epoch Notification => #91
  Lua Script = $env{CENT_SCENARIOS_HOME}/epochNotification.lua
Input 1=#90, Input 2=#91 -> Button VRPN Server "Classification result"
  Peripheral name = CENTControlStream
  Button 1 ON = OVTK_GDF_Correct
  Button 1 OFF = OVTK_GDF_Incorrect
  Button 2 ON = OVTK_StimulationId_Label_00
  Button 2 OFF = OVTK_StimulationId_Label_01
#83 -> Simple DSP => #93
  Equation = 10
Input 1=#75, Input 2=#78, Input 3=#87, Input 4=#93 -> Current theta/beta powers
  Peripheral name = CENTInGamePowerLevel
Input stream 1=#0.Experiment information, Input stream 2=#0.EEG stream -> Identity => #95
Experiment information=#95.Output stream 1, Signal=#95.Output stream 2, Stimulation=#90 -> GDF file writer
  Filename = $env{CENT_CURRENT_GAME}/game.gdf

CENT VRPN Client
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
-> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
