OpenViBE-Scenario
Comment
  1 = Current noise value
  2 = Noise threshold1
  3 = Noise threshold2
  4 = Min value
  5 = Max value

0xc67a01dc GDF file reader => #0
  Filename = $env{CENT_SCENARIOS_HOME}/gdf/EEG/2.gdf
  Samples per buffer = 25
#0.EEG stream -> Temporal filter - GPL => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector "Channels: 1-4"
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
-> liveEEG
  Peripheral name = liveEEG
#1 -> Channel Selector "Channels: 5-8"
  Channel List = 5:8
  Action = Select
  Channel Matching Method = Smart
-> liveEEG_5_8
  Peripheral name = liveEEG_5_8
#0.EEG stream -> Time based epoching => #6
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Temporal filter "Noise band" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 70
  High cut frequency (Hz) = 80
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
#7 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #10
  Spectral components = Amplitude
#10.Amplitude -> noise_c => #11
  Considers zeros = false
#7 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #13
  Spectral components = Amplitude
#13.Amplitude -> noise_c => #14
  Considers zeros = false
#7 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #16
  Spectral components = Amplitude
#16.Amplitude -> noise_c => #17
  Considers zeros = false
#7 -> Channel Selector "Ch 5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Index
-> FFT => #19
  Spectral components = Amplitude
#19.Amplitude -> noise_c => #20
  Considers zeros = false
#7 -> Channel Selector "Ch 6"
  Channel List = 6
  Action = Select
  Channel Matching Method = Index
-> FFT => #22
  Spectral components = Amplitude
#22.Amplitude -> noise_c => #23
  Considers zeros = false
#7 -> Channel Selector "Ch 7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Index
-> FFT => #25
  Spectral components = Amplitude
#25.Amplitude -> noise_c => #26
  Considers zeros = false
#7 -> Channel Selector "Ch 8"
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
-> FFT => #28
  Spectral components = Amplitude
#28.Amplitude -> noise_c => #29
  Considers zeros = false
#6 -> Temporal filter "EEG-band" => #30
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.5
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Channel Selector "Ch 1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
#30 -> Channel Selector "Ch 2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
-> FFT => #33
  Spectral components = Amplitude
#33.Amplitude -> noise_max => #34
  Considers zeros = false
#30 -> Channel Selector "Ch 3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> FFT => #36
  Spectral components = Amplitude
#36.Amplitude -> noise_max => #37
  Considers zeros = false
#30 -> Channel Selector "Ch 4"
  Channel List = 4
  Action = Select
  Channel Matching Method = Index
-> FFT => #39
  Spectral components = Amplitude
#39.Amplitude -> noise_max => #40
  Considers zeros = false
#30 -> Channel Selector "Ch 5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Index
-> FFT => #42
  Spectral components = Amplitude
#42.Amplitude -> noise_c => #43
  Considers zeros = false
#30 -> Channel Selector "Ch 6"
  Channel List = 6
  Action = Select
  Channel Matching Method = Index
-> FFT => #45
  Spectral components = Amplitude
#45.Amplitude -> noise_c => #46
  Considers zeros = false
#30 -> Channel Selector "Ch 7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Index
-> FFT => #48
  Spectral components = Amplitude
#48.Amplitude -> noise_c => #49
  Considers zeros = false
#30 -> Channel Selector "Ch 8"
  Channel List = 8
  Action = Select
  Channel Matching Method = Index
-> FFT => #51
  Spectral components = Amplitude
#51.Amplitude -> noise_c => #52
  Considers zeros = false
noise_c => #53
  Considers zeros = false
Input - A=#53, Input - B=#11, Input - C=#14, Input - D=#17, Input - E=#20, Input - F=#23, Input - G=#26, Input - H=#29 -> Simple DSP "CURRENT_NOISE_LEVEL" => #54
  Equation = (a+b+c+d+e+f+g+h)/8
noise_max => #55
  Considers zeros = false
Input - A=#55, Input - B=#34, Input - C=#37, Input - D=#40, Input - E=#43, Input - F=#46, Input - G=#49, Input - H=#52 -> Simple DSP "MAX_NOISE_min_max_thresholds" => #56
  Equation = (a+b+c+d+e+f+g+h)/8
-> Simple DSP "Threshold 1" => #57
  Equation = x*(1/3)
#56 -> Simple DSP "Threshold 2" => #58
  Equation = x*(2/3)
#56 -> Simple DSP "Min noise" => #59
  Equation = 0
Input 1=#54, Input 2=#57, Input 3=#58, Input 4=#59 -> Noise level
  Peripheral name = CENTNoiseLevel

FFT
  Spectral components = Amplitude

FFT
  Spectral components = Amplitude

CENT VRPN Client
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
-> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
