OpenViBE-Scenario
Comment
  Calculate theta and beta
  baseline powers. Write
  results to a csv file.

GDF file reader => #0
  Filename = $env{CENT_SCENARIOS_HOME}/gdf/EEG/2.gdf
  Samples per buffer = 25
#0.EEG stream -> Channel Rename => #1
  New channel names = Reference;Channel 2;Cz
Button VRPN Client => #2
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_BaselineStart
  Button 2 OFF = OVTK_StimulationId_BaselineStop
#2.Output 1 -> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Triggers=#2.Output 2, Matrix=#1 -> Stream Switch => #4
  Switch stim for output 1 = OVTK_StimulationId_BaselineStart
  Switch stim for output 2 = OVTK_StimulationId_BaselineStop
#4.Output[0] -> Reference Channel
  Channel = Reference
  Channel Matching Method = Smart
-> Channel Selector => #6
  Channel List = Cz
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #7
  Epoch 1 duration (in sec) = 5
  Epoch 1 intervals (in sec) = 5
-> Channel Selector
  Channel List = Cz
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Theta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 7
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm"
  Equation = log(x+1)
-> CSV File Writer "Write theta"
  Filename = $env{CENT_CURRENT_SESSION}/thetaval.csv
  Column separator = " "
  Use compression = false
#7 -> Channel Selector
  Channel List = Cz
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Beta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm"
  Equation = log(x+1)
-> CSV File Writer "Write beta"
  Filename = $env{CENT_CURRENT_SESSION}/betaval.csv
  Column separator =
  Use compression = false
#7 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Spectral analysis - GPL => #21
  Spectral components = Amplitude
#21.Amplitude -> CSV File Writer
  Filename = $env{CENT_CURRENT_SESSION}/baseline_spectrum.csv
  Column separator = ;
  Use compression = false
#6 -> Time based epoching
  Epoch 1 duration (in sec) = 5
  Epoch 1 intervals (in sec) = 5
#4.Output[0] -> Live EEG
  Peripheral name = liveEEG
Experiment information=#0.Experiment information, Signal=#4.Output[0] -> GDF file writer
  Filename = $env{CENT_CURRENT_SESSION}/baseline.gdf
