OpenViBE-Scenario
Comment
  these connections are just to stimulate dsp box to output a value, input will be ignored in those boxes
Comment
  these connections are just to stimulate dsp box to output a value, input will be ignored in those boxes
Comment
  this one is generated by Lua in Baseline2 scenario
Comment
  Beta coefficient  generated by Cent
Comment
  this one is generated by Lua in Baseline2 scenario
Comment
  Beta coefficient  generated by Cent

GDF file reader => #0
  Filename = $env{CENT_SCENARIOS_HOME}/gdf/EEG/2.gdf
  Samples per buffer = 25
#0.EEG stream -> Channel Rename
  New channel names = Reference;
-> Reference Channel
  Channel = Reference
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = 2;3
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
-> Channel Selector
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Theta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 7
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm" => #9
  Equation = log(x+1)
-> Simple DSP "ThetaPowerFromBaselineLua" => #10
  Equation = 5
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/thetabase.cfg
#9 -> Simple DSP "ThetaCoeffFromCent" => #11
  Equation = 1,05
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/ThetaCoeff.cfg
Input - A=#10, Input - B=#11 -> Simple DSP "multiply" => #12
  Equation = a*b
Input - A=#9, Input - B=#12 -> Simple DSP "Substract baseline (theta)" => #13
  Equation = b-a
-> Feature aggregator
-> Classifier processor => #15
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = $env{CENT_CURRENT_PATIENT}/class_theta.cfg
  Reject class label = OVTK_GDF_Rejection
  Class 1 label = OVTK_StimulationId_NonTarget
  Class 2 label = OVTK_StimulationId_Target
#4 -> Channel Selector
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Beta Bandpass"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Simple DSP "Compute power"
  Equation = x*x
-> Signal average "Average over epoch"
-> Simple DSP "Logarithm" => #20
  Equation = log(x+1)
-> Simple DSP "BetaPowerFromBaselineLua" => #21
  Equation = 5
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/betabase.cfg
#20 -> Simple DSP "BetaCoeffFromCent" => #22
  Equation = 1,05
  0x8d21ff41 = $env{CENT_CURRENT_SESSION}/BetaCoeff.cfg
Input - A=#21, Input - B=#22 -> Simple DSP "multiply" => #23
  Equation = a*b
Input - A=#20, Input - B=#23 -> Simple DSP "Substract baseline (beta)" => #24
  Equation = a-b
Input 1=#13, Input 2=#24, Input 3=#12 -> Current theta/beta powers
  Peripheral name = CENTInGamePowerLevel
#24 -> Feature aggregator
-> Classifier processor => #27
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = $env{CENT_CURRENT_PATIENT}/class_beta.cfg
  Reject class label = OVTK_GDF_Rejection
  Class 1 label = OVTK_StimulationId_NonTarget
  Class 2 label = OVTK_StimulationId_Target
Classification result 1=#15.Labels, Classification result 2=#27.Labels -> Voting Classifier
  Number of repetitions = 12
  Target class label = OVTK_StimulationId_Target
  Non target class label = OVTK_StimulationId_NonTarget
  Reject class label = OVTK_GDF_Incorrect
  Result class label base = OVTK_GDF_Correct
  Choose one if ex-aequo = false
Experiment information=#0.Experiment information, Signal=#0.EEG stream -> GDF file writer
  Filename = $env{CENT_CURRENT_GAME}/game.gdf
#0.EEG stream -> Live EEG
  Peripheral name = liveEEG

Button VRPN Client
  Peripheral name = cent_button_vrpn@localhost:3884
  Button 1 ON = OVTK_StimulationId_ExperimentStop
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
-> Player Controller "Terminate scenario"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Keyboard stimulator
  Filename = ../share/openvibe-plugins/stimulation/simple-keyboard-to-stimulations.txt
-> 0xc67a01dc Button VRPN Server "Classification result"
  Peripheral name = CENTControlStream
  Button 1 ON = OVTK_StimulationId_Label_01
  Button 1 OFF = OVTK_StimulationId_Label_00
